def model tentusscher_2006 as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mmol as
    unit second {mult: 1000};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit J_per_mol_per_K as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m6_per_mol2 as
    unit metre {expo: 6.0};
    unit mole {expo: -2.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mM2 as
    unit metre {expo: -6.0};
    unit mole {expo: 2.0};
  enddef;
  def unit mM3 as
    unit metre {expo: -9.0};
    unit mole {expo: 3.0};
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit s_mol_per_m3_times_1e_minus_3 as
    unit metre {expo: -3.0, mult: 0.001};
    unit second;
    unit mole;
  enddef;
  def unit uF as
    unit gram {expo: -1.0, mult: 1e-09};
    unit metre {expo: -2.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit um3 as
    unit metre {expo: 3.0, mult: 1e-18};
  enddef;

  def comp calcium as
    var Buf_c: mM {init: 0.2};
    var Buf_sr: mM {init: 10.0};
    var Buf_ss: mM {init: 0.4};
    var Ca_i: mM {pub: out, init: 1.05782268600543037e-04};
    var Ca_i_bufc: mM2;
    var Ca_sr: mM {init: 3.55567791655852350};
    var Ca_sr_bufsr: mM2;
    var Ca_ss: mM {pub: out, init: 2.14172873269809840e-04};
    var Ca_ss_bufss: mM2;
    var Cm: uF {pub: in};
    var EC: mM {init: 1.5};
    var F: C_per_mmol {pub: in};
    var ICaB: A_per_F {pub: in};
    var ICaL: A_per_F {pub: in};
    var INaCa: A_per_F {pub: in};
    var IpCa: A_per_F {pub: in};
    var ItCa: A_per_F {pub: out};
    var K_buf_c: mM {init: 0.001};
    var K_buf_sr: mM {init: 0.3};
    var K_buf_ss: mM {init: 0.00025};
    var K_up: mM {init: 0.00025};
    var O: dimensionless;
    var R_prime: s_mol_per_m3_times_1e_minus_3 {init: 9.89066126100902498e-01};
    var V_leak: mS_per_uF {init: 0.00036};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var V_rel: mS_per_uF {init: 0.102};
    var V_sr: um3 {init: 0.001094};
    var V_ss: um3 {init: 5.468e-05};
    var V_xfer: mS_per_uF {init: 0.0038};
    var Vc: um3 {pub: in};
    var Vmax_up: mM_per_ms {init: 0.006375};
    var calcium_O_k1: dimensionless;
    var calcium_O_k3: mS_per_uF {init: 0.06};
    var calcium_R_prime_k2: dimensionless;
    var calcium_R_prime_k4: mS_per_uF {init: 0.005};
    var i_leak: mM;
    var i_rel: mM;
    var i_up: mM2;
    var i_xfer: mM;
    var k1_prime: dimensionless {init: 0.15};
    var k2_prime: dimensionless {init: 0.045};
    var kcasr: mM2;
    var max_sr: dimensionless {init: 2.5};
    var min_sr: dimensionless {init: 1.0};
    var time: ms {pub: in};
    ode(Ca_i, time) = Ca_i_bufc*((i_leak-i_up)*V_sr/Vc+i_xfer-(ItCa-ICaL)*Cm/(2.0{dimensionless}*Vc*F));
    Ca_i_bufc = 1.0{dimensionless}/(1.0{dimensionless}+Buf_c*K_buf_c/sqr(Ca_i+K_buf_c));
    ode(Ca_sr, time) = Ca_sr_bufsr*(i_up-(i_rel+i_leak));
    Ca_sr_bufsr = 1.0{dimensionless}/(1.0{dimensionless}+Buf_sr*K_buf_sr/sqr(Ca_sr+K_buf_sr));
    ode(Ca_ss, time) = Ca_ss_bufss*(-ICaL*Cm/(2.0{dimensionless}*V_ss*F)+i_rel*V_sr/V_ss-i_xfer*Vc/V_ss);
    Ca_ss_bufss = 1.0{dimensionless}/(1.0{dimensionless}+Buf_ss*K_buf_ss/sqr(Ca_ss+K_buf_ss));
    ItCa = ICaB+IpCa+ICaL-2.0{dimensionless}*INaCa;
    O = calcium_O_k1*sqr(Ca_ss)*R_prime/(calcium_O_k3+calcium_O_k1*sqr(Ca_ss));
    ode(R_prime, time) = -calcium_R_prime_k2*Ca_ss*R_prime+calcium_R_prime_k4*(1.0{dimensionless}-R_prime);
    calcium_O_k1 = k1_prime/kcasr;
    calcium_R_prime_k2 = k2_prime*kcasr;
    i_leak = V_leak*(Ca_sr-Ca_i);
    i_rel = V_rel*O*(Ca_sr-Ca_ss);
    i_up = Vmax_up/(1.0{dimensionless}+sqr(K_up)/sqr(Ca_i));
    i_xfer = V_xfer*(Ca_ss-Ca_i);
    kcasr = max_sr-(max_sr-min_sr)/(1.0{dimensionless}+sqr(EC/Ca_sr));
  enddef;

  def comp cell as
    var type: dimensionless {pub: out, init: 1.0};
  enddef;

  def comp engine as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp extra as
    var Cao: mM {pub: out, init: 2.0};
    var Ko: mM {pub: out, init: 5.4};
    var Nao: mM {pub: out, init: 140.0};
  enddef;

  def comp icab as
    var ECa: mV {pub: in};
    var ICaB: A_per_F {pub: out};
    var V: mV {pub: in};
    var g_bca: mS_per_uF;
    var scale_in: dimensionless {init: 1.51992};
    ICaB = g_bca*(V-ECa);
    g_bca = scale_in*0.000592{mS_per_uF};
  enddef;

  def comp ical as
    var Ca_ss: mM {pub: in};
    var Cao: mM {pub: in};
    var FFTR: dimensionless {pub: in};
    var FTR: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var ICaL: A_per_F {pub: out};
    var V: mV {pub: in};
    var conductance_cal_compound: dimensionless {init: 1.0};
    var d: dimensionless {init: 3.30548499869733964e-05};
    var f: dimensionless {init: 9.77158843631106722e-01};
    var f2: dimensionless {init: 9.99406290178190937e-01};
    var fCass: dimensionless {init: 9.99972178434477055e-01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var gCaL: mS_per_uF;
    var gamma: dimensionless;
    var ical_d_alpha: dimensionless;
    var ical_d_beta: dimensionless;
    var ical_d_inf: dimensionless;
    var ical_d_tau: dimensionless;
    var ical_f2_inf: dimensionless;
    var ical_f2_tau: dimensionless;
    var ical_fCass_inf: m6_per_mol2;
    var ical_fCass_tau: m6_per_mol2;
    var ical_f_inf: dimensionless;
    var ical_f_tau: dimensionless;
    var p1: dimensionless;
    var p2: mM;
    var p3: dimensionless;
    var p4: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance_scaling_factor
    var scale_cal: dimensionless {init: 4.12823};
    var scale_tau_f: dimensionless {init: 0.309265};
    var time: ms {pub: in};
    ICaL = sel
      case V == 15.0{dimensionless}:
        p1*(p2-p4)/p3;
      otherwise:
        p1*(V-15.0{dimensionless})*(p2*exp(p3*(V-15.0{dimensionless}))-p4)/(exp(p3*(V-15.0{dimensionless}))-1.0{dimensionless});
    endsel;
    ode(d, time) = (ical_d_inf-d)/ical_d_tau;
    ode(f, time) = (ical_f_inf-f)/ical_f_tau;
    ode(f2, time) = (ical_f2_inf-f2)/ical_f2_tau;
    ode(fCass, time) = (ical_fCass_inf-fCass)/ical_fCass_tau;
    gCaL = conductance_cal_compound*scale_cal*3.98e-5{mS_per_uF};
    gamma = 1.0{dimensionless}/(1.0{dimensionless}+exp((50.0{dimensionless}-V)/20.0{dimensionless}));
    ical_d_alpha = 1.4{dimensionless}/(1.0{dimensionless}+exp((-35.0{dimensionless}-V)/13.0{dimensionless}))+0.25{dimensionless};
    ical_d_beta = 1.4{dimensionless}/(1.0{dimensionless}+exp((V+5.0{dimensionless})/5.0{dimensionless}));
    ical_d_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((-8.0{dimensionless}-V)/7.5{dimensionless}));
    ical_d_tau = ical_d_alpha*ical_d_beta+gamma;
    ical_f2_inf = 0.67{dimensionless}/(1.0{dimensionless}+exp((V+35.0{dimensionless})/7.0{dimensionless}))+0.33{dimensionless};
    ical_f2_tau = 562.0{dimensionless}*exp(-sqr(V+27.0{dimensionless})/240.0{dimensionless})+31.0{dimensionless}/(1.0{dimensionless}+exp((25.0{dimensionless}-V)/10.0{dimensionless}))+80.0{dimensionless}/(1.0{dimensionless}+exp((V+30.0{dimensionless})/10.0{dimensionless}));
    ical_fCass_inf = 0.6{dimensionless}/(1.0{dimensionless}+sqr(Ca_ss/0.05{dimensionless}))+0.4{dimensionless};
    ical_fCass_tau = 80.0{dimensionless}/(1.0{dimensionless}+sqr(Ca_ss/0.05{dimensionless}))+2.0{dimensionless};
    ical_f_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+20.0{dimensionless})/7.0{dimensionless}));
    ical_f_tau = scale_tau_f*(1102.5{dimensionless}*exp(-sqr(V+27.0{dimensionless})/225.0{dimensionless})+200.0{dimensionless}/(1.0{dimensionless}+exp((13.0{dimensionless}-V)/10.0{dimensionless}))+180.0{dimensionless}/(1.0{dimensionless}+exp((V+30.0{dimensionless})/10.0{dimensionless}))+20.0{dimensionless});
    p1 = gCaL*d*f*f2*fCass*4.0{dimensionless}*FFTR;
    p2 = 0.25{dimensionless}*Ca_ss;
    p3 = 2.0{dimensionless}*FTR;
    p4 = Cao;
  enddef;

  def comp ik1 as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var IK1: A_per_F {pub: out};
    var Ko: mM {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var gK1: mS_per_uF;
    var ik1_inf_alpha: dimensionless;
    var ik1_inf_beta: dimensionless;
    var inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance_scaling_factor
    var scale_k1: dimensionless {init: 0.249053};
    IK1 = gK1*inf*sqrt(Ko/5.4{dimensionless})*(V-EK);
    gK1 = scale_k1*5.405{mS_per_uF};
    ik1_inf_alpha = 0.1{dimensionless}/(1.0{dimensionless}+exp(0.06{dimensionless}*(V-EK-200.0{dimensionless})));
    ik1_inf_beta = (3.0{dimensionless}*exp(0.0002{dimensionless}*(V-EK+100.0{dimensionless}))+exp(0.1{dimensionless}*(V-EK-10.0{dimensionless})))/(1.0{dimensionless}+exp(-0.5{dimensionless}*(V-EK)));
    inf = ik1_inf_alpha/(ik1_inf_alpha+ik1_inf_beta);
  enddef;

  def comp ikr as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var IKr: A_per_F {pub: out};
    var V: mV {pub: in};
    var conductance_kr_compound: dimensionless {init: 1.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var gKr: mS_per_uF;
    var ikr_xr1_inf: dimensionless;
    var ikr_xr1_k3: dimensionless;
    var ikr_xr1_k4: dimensionless;
    var ikr_xr1_tau: dimensionless;
    var ikr_xr2_inf: dimensionless;
    var ikr_xr2_k1: dimensionless;
    var ikr_xr2_k2: dimensionless;
    var ikr_xr2_tau: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance_scaling_factor
    var scale_kr: dimensionless {init: 5.41967};
    var time: ms {pub: in};
    var xr1: dimensionless {init: 2.07650883539678194e-04};
    var xr2: dimensionless {init: 4.72733193318403078e-01};
    IKr = gKr*xr1*xr2*(V-EK);
    gKr = conductance_kr_compound*scale_kr*0.153{mS_per_uF};
    ikr_xr1_inf = ikr_xr1_k4/(ikr_xr1_k3+ikr_xr1_k4);
    ikr_xr1_k3 = 0.0873{dimensionless}*exp(0.00891{dimensionless}*V);
    ikr_xr1_k4 = 0.00515{dimensionless}*exp(-0.03158{dimensionless}*V);
    ikr_xr1_tau = 1.0{dimensionless}/(ikr_xr1_k3+ikr_xr1_k4);
    ikr_xr2_inf = ikr_xr2_k1/(ikr_xr2_k1+ikr_xr2_k2);
    ikr_xr2_k1 = 0.000226{dimensionless}*exp(0.0699{dimensionless}*V);
    ikr_xr2_k2 = 3.45e-5{dimensionless}*exp(-0.05462{dimensionless}*V);
    ikr_xr2_tau = 1.0{dimensionless}/(ikr_xr2_k1+ikr_xr2_k2);
    ode(xr1, time) = (ikr_xr1_inf-xr1)/ikr_xr1_tau;
    ode(xr2, time) = (ikr_xr2_inf-xr2)/ikr_xr2_tau;
  enddef;

  def comp iks as
    var EKs: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var IKs: A_per_F {pub: out};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var gKs: dimensionless;
    var iks_xs_alpha: dimensionless;
    var iks_xs_beta: dimensionless;
    var iks_xs_inf: dimensionless;
    var iks_xs_tau: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance_scaling_factor
    var scale_out: dimensionless {init: 1.3475};
    var time: ms {pub: in};
    var type: dimensionless {pub: in};
    var xs: dimensionless {init: 3.23090984071628057e-03};
    IKs = scale_out*gKs*xs*xs*(V-EKs);
    gKs = sel
      case type == 2.0{dimensionless}:
        0.098{dimensionless};
      otherwise:
        0.392{dimensionless};
    endsel;
    iks_xs_alpha = 1400.0{dimensionless}/sqrt(1.0{dimensionless}+exp((5.0{dimensionless}-V)/6.0{dimensionless}));
    iks_xs_beta = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-35.0{dimensionless})/15.0{dimensionless}));
    iks_xs_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((-5.0{dimensionless}-V)/14.0{dimensionless}));
    iks_xs_tau = 1.0{dimensionless}*iks_xs_alpha*iks_xs_beta+80.0{dimensionless};
    ode(xs, time) = (iks_xs_inf-xs)/iks_xs_tau;
  enddef;

  def comp ina as
    var ENa: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var INa: A_per_F {pub: out};
    var V: mV {pub: in};
    var conductance_na_compound: dimensionless {init: 1.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var gNa: mS_per_uF;
    var h: dimensionless {init: 7.48991583078272738e-01};
    var ina_h_alpha: dimensionless;
    var ina_h_beta: dimensionless;
    var ina_h_inf: dimensionless;
    var ina_h_tau: dimensionless;
    var ina_j_alpha: mV;
    var ina_j_beta: dimensionless;
    var ina_j_inf: dimensionless;
    var ina_j_tau: dimensionless;
    var ina_m_alpha: dimensionless;
    var ina_m_beta: dimensionless;
    var ina_m_inf: dimensionless;
    var ina_m_tau: dimensionless;
    var j: dimensionless {init: 7.48599753512242727e-01};
    var m: dimensionless {init: 1.66171456717857527e-03};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance_scaling_factor
    var scale_in: dimensionless {init: 1.85215};
    var time: ms {pub: in};
    INa = gNa*pow(m, 3.0{dimensionless})*h*j*(V-ENa);
    gNa = conductance_na_compound*scale_in*14.838{mS_per_uF};
    ode(h, time) = (ina_h_inf-h)/ina_h_tau;
    ina_h_alpha = sel
      case V < -40.0{dimensionless}:
        0.057{dimensionless}*exp(-(V+80.0{dimensionless})/6.8{dimensionless});
      otherwise:
        0.0{dimensionless};
    endsel;
    ina_h_beta = sel
      case V < -40.0{dimensionless}:
        2.7{dimensionless}*exp(0.079{dimensionless}*V)+310000.0{dimensionless}*exp(0.3485{dimensionless}*V);
      otherwise:
        0.77{dimensionless}/(0.13{dimensionless}*(1.0{dimensionless}+exp((V+10.66{dimensionless})/(-11.1{dimensionless}))));
    endsel;
    ina_h_inf = 1.0{dimensionless}/sqr(1.0{dimensionless}+exp((V+71.55{dimensionless})/7.43{dimensionless}));
    ina_h_tau = 1.0{dimensionless}/(ina_h_alpha+ina_h_beta);
    ina_j_alpha = sel
      case V < -40.0{dimensionless}:
        (-25428.0{dimensionless}*exp(0.2444{dimensionless}*V)-6.948e-6{dimensionless}*exp(-0.04391{dimensionless}*V))*(V+37.78{dimensionless})/(1.0{dimensionless}+exp(0.311{dimensionless}*(V+79.23{dimensionless})));
      otherwise:
        0.0{dimensionless};
    endsel;
    ina_j_beta = sel
      case V < -40.0{dimensionless}:
        0.02424{dimensionless}*exp(-0.01052{dimensionless}*V)/(1.0{dimensionless}+exp(-0.1378{dimensionless}*(V+40.14{dimensionless})));
      otherwise:
        0.6{dimensionless}*exp(0.057{dimensionless}*V)/(1.0{dimensionless}+exp(-0.1{dimensionless}*(V+32.0{dimensionless})));
    endsel;
    ina_j_inf = 1.0{dimensionless}/sqr(1.0{dimensionless}+exp((V+71.55{dimensionless})/7.43{dimensionless}));
    ina_j_tau = 1.0{dimensionless}/(ina_j_alpha+ina_j_beta);
    ina_m_alpha = 1.0{dimensionless}/(1.0{dimensionless}+exp((-60.0{dimensionless}-V)/5.0{dimensionless}));
    ina_m_beta = 0.1{dimensionless}/(1.0{dimensionless}+exp((V+35.0{dimensionless})/5.0{dimensionless}))+0.1{dimensionless}/(1.0{dimensionless}+exp((V-50.0{dimensionless})/200.0{dimensionless}));
    ina_m_inf = 1.0{dimensionless}/sqr(1.0{dimensionless}+exp((-56.86{dimensionless}-V)/9.03{dimensionless}));
    ina_m_tau = ina_m_alpha*ina_m_beta;
    ode(j, time) = (ina_j_inf-j)/ina_j_tau;
    ode(m, time) = (ina_m_inf-m)/ina_m_tau;
  enddef;

  def comp inab as
    var ENa: mV {pub: in};
    var INaB: A_per_F {pub: out};
    var V: mV {pub: in};
    var gNaB: mS_per_uF;
    var scale_in: dimensionless {init: 0.335583};
    INaB = gNaB*(V-ENa);
    gNaB = scale_in*0.00029{mS_per_uF};
  enddef;

  def comp inaca as
    var Ca_i: mM {pub: in};
    var Cao: mM {pub: in};
    var FTR: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var INaCa: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var K_NaCa: A_per_F {init: 1000.0};
    var K_sat: dimensionless {init: 0.1};
    var Km_Ca: mM {init: 1.38};
    var Km_Nai: mM {init: 87.5};
    var Na_i: mM {pub: in};
    var Nai3: mM3;
    var Nao: mM {pub: in};
    var Nao3: dimensionless;
    var V: mV {pub: in};
    var a: dimensionless {init: 2.5};
    var g: dimensionless {init: 0.35};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance_scaling_factor
    var scale_in: dimensionless {init: 5.82617};
    INaCa = scale_in*K_NaCa*(exp(g*V*FTR)*Nai3*Cao-exp((g-1.0{dimensionless})*V*FTR)*Nao3*Ca_i*a)/((pow(Km_Nai, 3.0{dimensionless})+Nao3)*(Km_Ca+Cao)*(1.0{dimensionless}+K_sat*exp((g-1.0{dimensionless})*V*FTR)));
    Nai3 = Na_i*Na_i*Na_i;
    Nao3 = Nao*Nao*Nao;
  enddef;

  def comp inak as
    var FTR: dimensionless {pub: in};
    var INaK: A_per_F {pub: out};
    var K_mNa: mM {init: 40.0};
    var K_mk: mM {init: 1.0};
    var Ko: mM {pub: in};
    var Na_i: mM {pub: in};
    var P_NaK: A_per_F {init: 2.724};
    var V: mV {pub: in};
    var scale_out: dimensionless {init: 1.38952};
    INaK = scale_out*P_NaK*Ko/(Ko+K_mk)*Na_i/(Na_i+K_mNa)/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FTR)+0.0353{dimensionless}*exp(-V*FTR));
  enddef;

  def comp ipca as
    var Ca_i: mM {pub: in};
    var IpCa: A_per_F {pub: out};
    var K_pCa: mM {init: 0.0005};
    var g_pCa: A_per_F;
    var scale_out: dimensionless {init: 0.311154};
    IpCa = g_pCa*Ca_i/(Ca_i+K_pCa);
    g_pCa = scale_out*0.1238{A_per_F};
  enddef;

  def comp ipk as
    var EK: mV {pub: in};
    var IpK: A_per_F {pub: out};
    var V: mV {pub: in};
    var gpK: mS_per_uF;
    var scale_in: dimensionless {init: 2.49093};
    IpK = gpK*(V-EK)/(1.0{dimensionless}+exp((25.0{dimensionless}-V)/5.98{dimensionless}));
    gpK = scale_in*0.0146{mS_per_uF};
  enddef;

  def comp ito as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var ITo: A_per_F {pub: out};
    var V: mV {pub: in};
    var dv: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var gTo: mS_per_uF;
    var ito_r_inf: dimensionless;
    var ito_r_tau: dimensionless;
    var ito_s_inf: dimensionless;
    var ito_s_tau: dimensionless;
    var r: dimensionless {init: 2.35709886030767176e-08};
    var s: dimensionless {init: 9.99997904693742057e-01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance_scaling_factor
    var scale_out: dimensionless {init: 0.274346};
    var time: ms {pub: in};
    var type: dimensionless {pub: in};
    ITo = scale_out*gTo*r*s*(V-EK);
    dv = sel
      case type == 0.0{dimensionless}:
        28.0{dimensionless};
      otherwise:
        20.0{dimensionless};
    endsel;
    gTo = sel
      case type == 0.0{dimensionless}:
        0.073{mS_per_uF};
      otherwise:
        0.294{mS_per_uF};
    endsel;
    ito_r_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((20.0{dimensionless}-V)/6.0{dimensionless}));
    ito_r_tau = 9.5{dimensionless}*exp(-sqr(V+40.0{dimensionless})/1800.0{dimensionless})+0.8{dimensionless};
    ito_s_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+dv)/5.0{dimensionless}));
    ito_s_tau = sel
      case type == 0.0{dimensionless}:
        1000.0{dimensionless}*exp(-sqr(V+67.0{dimensionless})/1000.0{dimensionless})+8.0{dimensionless};
      otherwise:
        85.0{dimensionless}*exp(-sqr(V+45.0{dimensionless})/320.0{dimensionless})+5.0{dimensionless}/(1.0{dimensionless}+exp((V-20.0{dimensionless})/5.0{dimensionless}))+3.0{dimensionless};
    endsel;
    ode(r, time) = (ito_r_inf-r)/ito_r_tau;
    ode(s, time) = (ito_s_inf-s)/ito_s_tau;
  enddef;

  def comp membrane as
    var ItCa: A_per_F {pub: in};
    var ItK: A_per_F {pub: in};
    var ItNa: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out, init: -8.53798558432631864e+01};
    var i_diff: A_per_F {init: 0.0};
    var i_ion: A_per_F;
    var i_stim: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(V, time) = -(i_ion+i_stim+i_diff);
    i_ion = ItK+ItCa+ItNa;
  enddef;

  def comp phys as
    var Cm: uF {pub: out, init: 0.185};
    var F: C_per_mmol {pub: out, init: 9.64853414999999950e+04};
    var FFTR: dimensionless {pub: out};
    var FTR: dimensionless {pub: out};
    var R: J_per_mol_per_K {init: 8314.472};
    var RTF: dimensionless {pub: out};
    var T: kelvin {init: 310.0};
    var Vc: um3 {pub: out, init: 0.016404};
    FFTR = F*F/(R*T);
    FTR = F/(R*T);
    RTF = R*T/F;
  enddef;

  def comp potassium as
    var Cm: uF {pub: in};
    var F: C_per_mmol {pub: in};
    var IK1: A_per_F {pub: in};
    var IKr: A_per_F {pub: in};
    var IKs: A_per_F {pub: in};
    var INaK: A_per_F {pub: in};
    var ITo: A_per_F {pub: in};
    var IpK: A_per_F {pub: in};
    var ItK: A_per_F {pub: out};
    var K_i: mM {pub: out, init: 1.35368636336204105e+02};
    var Vc: um3 {pub: in};
    var i_stim: A_per_F {pub: in};
    var time: ms {pub: in};
    ItK = IK1+ITo+IKr+IKs+IpK-2.0{dimensionless}*INaK;
    ode(K_i, time) = -(ItK+i_stim)/(Vc*F)*Cm;
  enddef;

  def comp rev as
    var Ca_i: mM {pub: in};
    var Cao: mM {pub: in};
    var ECa: mV {pub: out};
    var EK: mV {pub: out};
    var EKs: mV {pub: out};
    var ENa: mV {pub: out};
    var K_i: mM {pub: in};
    var Ko: mM {pub: in};
    var Na_i: mM {pub: in};
    var Nao: mM {pub: in};
    var P_kna: dimensionless {init: 0.03};
    var RTF: dimensionless {pub: in};
    ECa = 0.5{dimensionless}*RTF*ln(Cao/Ca_i);
    EK = RTF*ln(Ko/K_i);
    EKs = RTF*ln((Ko+P_kna*Nao)/(K_i+P_kna*Na_i));
    ENa = RTF*ln(Nao/Na_i);
  enddef;

  def comp sodium as
    var Cm: uF {pub: in};
    var F: C_per_mmol {pub: in};
    var INa: A_per_F {pub: in};
    var INaB: A_per_F {pub: in};
    var INaCa: A_per_F {pub: in};
    var INaK: A_per_F {pub: in};
    var ItNa: A_per_F {pub: out};
    var Na_i: mM {pub: out, init: 1.01338761744302950e+01};
    var Vc: um3 {pub: in};
    var time: ms {pub: in};
    ItNa = INa+INaB+3.0{dimensionless}*INaK+3.0{dimensionless}*INaCa;
    ode(Na_i, time) = -ItNa/(Vc*F)*Cm;
  enddef;

  def comp stimulus as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var amplitude: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var duration: ms {init: 0.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_stim: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var offset: ms {init: 50.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var period: ms {init: 1000.0};
    var time: ms {pub: in};
    amplitude = -52.0{A_per_F};
    i_stim = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*amplitude;
  enddef;
  def map between calcium and engine for
    vars time and time;
  enddef;
  def map between calcium and icab for
    vars ICaB and ICaB;
  enddef;
  def map between calcium and ical for
    vars Ca_ss and Ca_ss;
    vars ICaL and ICaL;
  enddef;
  def map between calcium and inaca for
    vars Ca_i and Ca_i;
    vars INaCa and INaCa;
  enddef;
  def map between calcium and ipca for
    vars Ca_i and Ca_i;
    vars IpCa and IpCa;
  enddef;
  def map between calcium and membrane for
    vars ItCa and ItCa;
  enddef;
  def map between calcium and phys for
    vars Cm and Cm;
    vars F and F;
    vars Vc and Vc;
  enddef;
  def map between calcium and rev for
    vars Ca_i and Ca_i;
  enddef;
  def map between cell and iks for
    vars type and type;
  enddef;
  def map between cell and ito for
    vars type and type;
  enddef;
  def map between engine and ical for
    vars time and time;
  enddef;
  def map between engine and ikr for
    vars time and time;
  enddef;
  def map between engine and iks for
    vars time and time;
  enddef;
  def map between engine and ina for
    vars time and time;
  enddef;
  def map between engine and ito for
    vars time and time;
  enddef;
  def map between engine and membrane for
    vars time and time;
  enddef;
  def map between engine and potassium for
    vars time and time;
  enddef;
  def map between engine and sodium for
    vars time and time;
  enddef;
  def map between engine and stimulus for
    vars time and time;
  enddef;
  def map between extra and ical for
    vars Cao and Cao;
  enddef;
  def map between extra and ik1 for
    vars Ko and Ko;
  enddef;
  def map between extra and inaca for
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between extra and inak for
    vars Ko and Ko;
  enddef;
  def map between extra and rev for
    vars Cao and Cao;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between icab and membrane for
    vars V and V;
  enddef;
  def map between icab and rev for
    vars ECa and ECa;
  enddef;
  def map between ical and membrane for
    vars V and V;
  enddef;
  def map between ical and phys for
    vars FFTR and FFTR;
    vars FTR and FTR;
  enddef;
  def map between ik1 and membrane for
    vars V and V;
  enddef;
  def map between ik1 and potassium for
    vars IK1 and IK1;
  enddef;
  def map between ik1 and rev for
    vars EK and EK;
  enddef;
  def map between ikr and membrane for
    vars V and V;
  enddef;
  def map between ikr and potassium for
    vars IKr and IKr;
  enddef;
  def map between ikr and rev for
    vars EK and EK;
  enddef;
  def map between iks and membrane for
    vars V and V;
  enddef;
  def map between iks and potassium for
    vars IKs and IKs;
  enddef;
  def map between iks and rev for
    vars EKs and EKs;
  enddef;
  def map between ina and membrane for
    vars V and V;
  enddef;
  def map between ina and rev for
    vars ENa and ENa;
  enddef;
  def map between ina and sodium for
    vars INa and INa;
  enddef;
  def map between inab and membrane for
    vars V and V;
  enddef;
  def map between inab and rev for
    vars ENa and ENa;
  enddef;
  def map between inab and sodium for
    vars INaB and INaB;
  enddef;
  def map between inaca and membrane for
    vars V and V;
  enddef;
  def map between inaca and phys for
    vars FTR and FTR;
  enddef;
  def map between inaca and sodium for
    vars INaCa and INaCa;
    vars Na_i and Na_i;
  enddef;
  def map between inak and membrane for
    vars V and V;
  enddef;
  def map between inak and phys for
    vars FTR and FTR;
  enddef;
  def map between inak and potassium for
    vars INaK and INaK;
  enddef;
  def map between inak and sodium for
    vars INaK and INaK;
    vars Na_i and Na_i;
  enddef;
  def map between ipk and membrane for
    vars V and V;
  enddef;
  def map between ipk and potassium for
    vars IpK and IpK;
  enddef;
  def map between ipk and rev for
    vars EK and EK;
  enddef;
  def map between ito and membrane for
    vars V and V;
  enddef;
  def map between ito and potassium for
    vars ITo and ITo;
  enddef;
  def map between ito and rev for
    vars EK and EK;
  enddef;
  def map between membrane and potassium for
    vars ItK and ItK;
  enddef;
  def map between membrane and sodium for
    vars ItNa and ItNa;
  enddef;
  def map between membrane and stimulus for
    vars i_stim and i_stim;
  enddef;
  def map between phys and potassium for
    vars Cm and Cm;
    vars F and F;
    vars Vc and Vc;
  enddef;
  def map between phys and rev for
    vars RTF and RTF;
  enddef;
  def map between phys and sodium for
    vars Cm and Cm;
    vars F and F;
    vars Vc and Vc;
  enddef;
  def map between potassium and rev for
    vars K_i and K_i;
  enddef;
  def map between potassium and stimulus for
    vars i_stim and i_stim;
  enddef;
  def map between rev and sodium for
    vars Na_i and Na_i;
  enddef;
enddef;
